OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

  Note: in order to run this scenario,
  the spatial filter should have been trained using
  2-train-xDAWN !

Generic stream reader => #0
  Filename = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/OpenvibeScenarios/markham-eeg-6x6/p300-xdawn-train-1-2-2-12-30-0.2-0.1-1.0-3.0-[2018.03.01-17.50.06].ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 5
-> xDAWN Spatial Filter => #3
  Spatial Filter Coefficients = 1.271852e-03 3.177388e-03 -2.022217e-03 4.859763e-03 1.003600e-03 9.167260e-03 -1.261950e-02 -6.411900e-03 -8.744055e-01 -4.751868e-01 9.637297e-02 -8.025049e-04 2.081584e-03 -1.453339e-03 6.502219e-04 -4.561420e-03 1.588135e-03 9.592338e-04 9.282006e-04 5.252053e-01 8.396999e-01 1.379522e-01 4.697305e-04 4.246585e-04 -4.292674e-04 -4.734897e-04 1.187557e-04 5.903875e-05 -2.657631e-04 2.460127e-04 -3.199111e-01 -1.631266e-01 9.332983e-01
  Number of Output Channels = 3
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/OpenvibeScenarios/p300-spatial-filter.cfg
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #4
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#4.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #6
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection" => #7
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#7.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #9
Stimulations=#0.Output stream 3, Features for class 1=#6, Features for class 2=#9 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/OpenvibeScenarios/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
targets=#6, nontargets=#9, stims=#0.Output stream 3 -> 0xc67a01dc Outputter
  Clock frequency (Hz) = 64
  Script = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/python/scripts/my_p300_3_outputter.py
