OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard, Jussi T. Lindgren
0x9f5c4075 = Data Acquisition
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

0xc67a01dc Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 10
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 2
  Number of columns = 2
  Number of repetitions = 4
  Number of trials = 30
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 0
Sequence stimulations=#1, Target stimulations=#2 -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
P300 Speller Stimulator=#1, Target Letter Generation=#2 -> My Visualisation
  Clock frequency (Hz) = 64
  Script = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/python/scripts/my_p300_1_visualization.py

Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#5.Experiment information, Input stream 2=#5.Signal stream, Input stream 3=#5.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/manali-eeg-2x2/p300-xdawn-train-[$core{date}-$core{time}].ov
  Use compression = false
#5.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
