OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Spatial Filter Training
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

0xc67a01dc Generic stream reader => #0
  Filename = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/Scenarios/markham-eeg-2x2/p300-xdawn-train-2-2-2-12-30-0.2-0.1-1.0-3.0-[2018.03.01-18.14.42].ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 5
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #4
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#0.Output stream 3, Session signal=#3, Evoked potential epochs=#4.Epoched signal -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
  Filter dimension = 3
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
