OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = LDA Classifier Trainer
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = /home/first/storage/Lab5 Recordings/online-mk-p300-xdawn-online-[2018.02.06-10.06.41].ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 5
-> xDAWN Spatial Filter => #3
  Spatial Filter Coefficients = 8.843368e-004 -6.539882e-003 6.493086e-005 -1.591978e-003 8.962039e-003 -3.487439e-003 -5.540185e-004 2.078431e-003 -9.881634e-001 1.370237e-001 6.792872e-002 -7.200659e-004 2.256230e-003 -2.132186e-004 -1.461755e-003 -9.444323e-003 -4.179003e-003 3.543052e-003 1.084137e-002 -8.566209e-001 4.692433e-001 2.139319e-001 1.155023e-003 -4.157936e-004 -4.741747e-004 1.237857e-003 -7.505389e-004 -1.501655e-003 8.736640e-004 1.437677e-003 -4.841511e-001 -8.735870e-001 4.934159e-002
  Number of Output Channels = 3
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #4
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#4.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #6
-> Python scripting
  Clock frequency (Hz) = 64
  Script = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/python/scripts/explore_feature_aggregator.py
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Non Target Selection" => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#0.Output stream 3, Features for class 1=#6, Features for class 2=#10 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#10 -> 0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = /media/sf_desktop-tmp/P300-Speller-with-Groups-of-Letters/python/scripts/explore_feature_aggregator_nontarget.py
