OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online Use
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
Input signal=#4, Input stimulations=#1.Output stream 3 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-xdawn-online-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 3 -> Identity => #10
New input[0]=#8.Labels, New input[1]=#10 -> P300 accumulator => #11
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-accumulator.lua
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
#10 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #14
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #15
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#14, Target stimulations=#15, Row selection stimulations=#11.Stimulations, Column selection stimulations=#11.New output -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
