OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  The clock stimulator generates
  1 stim per second.

  The associated python script should
  print all the received stimulations.

Generic stream reader => #0
  Filename = /home/first/storage/Lab5 Recordings/online-mk-p300-xdawn-online-[2018.02.06-11.08.51].ov
Data=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output stream 2 -> 0xc67a01dc File Stims
  Clock frequency (Hz) = 64
  Script = /media/first/datastorage/P300-Speller-with-Groups-of-Letters/python/scripts/my-python-print-stimulations.py

Clock stimulator
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Label_00

Clock Stims
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/python-print-stimulations.py
